PsychoPy2experiment version="2022.2.5"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Digit Span Task
  keyboardBackend = ioHub
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Routines
  Routine Instructions
    TextComponent instr_bwd
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        GERİ SAYI DİZİSİ TESTİ

        Bu testte ekranınıza birtakım sayı dizileri gelecektir. Sizden istenen sayı dizilerini hatırlayıp "ters sırada" yazmanızdır. Örneğin ekrana sırasıyla 1-2-3 geldiğinde sizden istenen hatırlama ekranında 3-2-1 yazmanızdır.

        Test 3 rakamlı dizilerle başlayacaktır (1-2-3 gibi). Eğer 3 rakamlı dizileri doğru hatırlarsanız dizi bir rakam uzayacaktır (1-2-3-4 gibi). Üç kez arka arkaya hata yaparsanız test sona erecektir.

        Yanıtınızı yazmak için klavyenizin üstündeki rakam tuşlarını kullanın. Hata yaparsanız BACKSPACE (GERİ) tuşu ile hatanızı düzeltebilirsiniz. Rakamları girdikten sonra yanıtınızı göndermek için ENTER tuşuna basın. Her yanıttan sonra geribildirim alacaksınız.

        Rakamları girerken arada boşluk bırakmayın.  Rakam dışında başka bir karakter (+, - vb.) girmeyin.

        Açıklamaları anladıysanız hazır olunca deneye başlamak için SPACE (BOŞLUK) tuşuna basın.
    KeyboardComponent start_bwd
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Presentation
    TextComponent fixation
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    TextComponent pres_text
      letterHeight = 0.1
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1
      text [set every repeat] = $str(digits)[digitLoop.thisN]
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  Routine Recall
    TextComponent recall_txt
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 0
      text = Rakamları ters sırada yazın
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.1
      size = (None, None)
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        # Store responses
        allResponses = []
      End Routine:
        if textbox.text == str(response):
            correct = 1
            fbTxt = 'Correct!'
        else:
            correct = 0
            fbTxt = 'Incorrect'
        thisExp.addData('correct', correct)

        # Store each response in list
        allResponses.append(correct)
    CodeComponent JScode
      Code Type = JS
      Begin JS Routine:
        // this is a temporary fix to allow editable textbox to be used on several trials
        textbox.refresh()
    KeyboardComponent key_resp
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Feedback
    TextComponent feedback_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $fbTxt
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    CodeComponent feedback_code
      Code Type = Auto->JS
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      End Routine:
        # for incorrect, check that two responses exist
        # and that their sum of last two responses is zero
        if len(allResponses) >= 3 and sum(allResponses[-3:]) == 0:
            trials.finished = True
            blocks.finished = True
        # If sum of last two responses is 2, move to next sequence
        elif sum(allResponses[-2:]) == 2:
            trials.finished = True
            allResponses = []
  Routine End
    TextComponent thank_you
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        Geri sayı dizisi testi sona ermiştir.
        Birazdan ileri sayı dizisi başlayacaktır.
        Lütfen bekleyin...
  Routine Instructions_Forward
    TextComponent instr_fwd
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        İLERİ SAYI DİZİSİ TESTİ

        Bu testte ekranınıza birtakım sayı dizileri gelecektir. Sizden istenen sayı dizilerini hatırlayıp "aynı sırada" yazmanızdır. Örneğin ekrana sırasıyla 1-2-3 geldiğinde sizden istenen hatırlama ekranında 1-2-3 yazmanızdır.

        Test 3 rakamlı dizilerle başlayacaktır (1-2-3 gibi). Eğer 3 rakamlı dizileri doğru hatırlarsanız dizi bir rakam uzayacaktır (1-2-3-4 gibi). Üç kez arka arkaya hata yaparsanız test sona erecektir.

        Yanıtınızı yazmak için klavyenizin üstündeki rakam tuşlarını kullanın. Hata yaparsanız BACKSPACE (GERİ) tuşu ile hatanızı düzeltebilirsiniz. Rakamları girdikten sonra yanıtınızı göndermek için ENTER tuşuna basın. Her yanıttan sonra geribildirim alacaksınız.

        Rakamları girerken arada boşluk bırakmayın.  Rakam dışında başka bir karakter (+, - vb.) girmeyin.

        Açıklamaları anladıysanız hazır olunca deneye başlamak için SPACE (BOŞLUK) tuşuna basın.
    KeyboardComponent start_fwd
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Presentation_Forward
    TextComponent fixation_fwd
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    TextComponent pres_text_fwd
      letterHeight = 0.1
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1
      text [set every repeat] = $str(digits_fwd)[digitLoop_fwd.thisN]
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  Routine Recall_Forward
    TextComponent recall_txt_fwd
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 0
      text = Rakamları aynı sırada yazın
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    TextboxComponent textbox_fwd
      bold = False
      editable = True
      letterHeight = 0.1
      size = (None, None)
      startVal [time (s)] = 0.0
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    CodeComponent code_fwd
      Code Type = Auto->JS
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      Begin Experiment:
        # Store responses
        allResponsesfwd = []
      End Routine:
        if textbox_fwd.text == str(digits_fwd):
            correct = 1
            fbTxtFwd = 'Correct!'
        else:
            correct = 0
            fbTxtFwd = 'Incorrect'
        thisExp.addData('correct', correct)

        # Store each response in list
        allResponsesfwd.append(correct)
    CodeComponent JScode_fwd
      Code Type = JS
      Begin JS Routine:
        // this is a temporary fix to allow editable textbox to be used on several trials
        textbox.refresh()
    KeyboardComponent key_resp_fwd
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Feedback_Forward
    TextComponent feedback_text_fwd
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $fbTxtFwd
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    CodeComponent feedback_code_fwd
      Code Type = Auto->JS
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      End Routine:
        # for incorrect, check that two responses exist
        # and that their sum of last two responses is zero
        if len(allResponsesfwd) >= 3 and sum(allResponsesfwd[-3:]) == 0:
            trials_fwd.finished = True
            blocks_fwd.finished = True
        # If sum of last two responses is 2, move to next sequence
        elif sum(allResponsesfwd[-2:]) == 2:
            trials_fwd.finished = True
            allResponsesfwd = []
  Routine End_Fwd
    TextComponent thank_you_fwd
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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      text:
        Çalışma sona ermiştir.
        Katılımınız için teşekkürler.
  Routine hello
    TextComponent text_hello
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Bellek dizisi testlerine hoş geldiniz.

        Bu testler kesintisiz dikkat gerekmektedir. Bulunduğunuz odanın sessiz ve telefonunuzun kapalı ya da sessiz konumda olduğundan emin olun.

        LÜTFEN AÇIKLAMALARI OKUMADAN TESTLERE BAŞLAMAYIN.

        Bu çalışmada arka arkaya iki test bulunmaktadır. Her testin açıklaması test başlamadan önce ekrana gelecektir.

        Lütfen iki testte de olabildiğince hızlı ve doğru yanıt vermeye çalışın.

        TESTLER SIRASINDA KAĞIT KALEM KULLANMAYIN.
        RAKAMLARI SADECE AKLINIZDA TUTUN!

        Devam etmek için hazır olduğunuzda SPACE (BOŞLUK) tuşuna basın.
    KeyboardComponent key_resp_hello
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine goodbye
    TextComponent text_goodbye
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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      text:
        Çalışma sona ermiştir.
        Katılımınız için teşekkürler.
Flow
  Routine hello
  Routine Instructions
  LoopInitiator blocks loopType="TrialHandler"
    conditionsFile = choose_digitSpan.xlsx
    isTrials = False
    loopType = sequential
    nReps = 5
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    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = $condition_file
      loopType = sequential
      nReps = 1
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      LoopInitiator digitLoop loopType="TrialHandler"
        isTrials = False
        loopType = sequential
        nReps = digitSpan
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        Routine Presentation
      LoopTerminator digitLoop
      Routine Recall
      Routine Feedback
    LoopTerminator trials
  LoopTerminator blocks
  Routine End
  Routine Instructions_Forward
  LoopInitiator blocks_fwd loopType="TrialHandler"
    conditionsFile = choose_digitSpan_fwd.xlsx
    isTrials = False
    loopType = sequential
    nReps = 5
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    conditions:
      [{'condition_file_fwd': 'three_fwd.xlsx'},
      {'condition_file_fwd': 'four_fwd.xlsx'},
      {'condition_file_fwd': 'five_fwd.xlsx'},
      {'condition_file_fwd': 'six_fwd.xlsx'},
      {'condition_file_fwd': 'seven_fwd.xlsx'},
      {'condition_file_fwd': 'eight_fwd.xlsx'},
      {'condition_file_fwd': 'nine_fwd.xlsx'},
      {'condition_file_fwd': 'ten_fwd.xlsx'},
      {'condition_file_fwd': 'eleven_fwd.xlsx'},
      {'condition_file_fwd': 'twelve_fwd.xlsx'}]
    LoopInitiator trials_fwd loopType="TrialHandler"
      conditionsFile = $condition_file_fwd
      loopType = sequential
      nReps = 1
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      LoopInitiator digitLoop_fwd loopType="TrialHandler"
        isTrials = False
        loopType = sequential
        nReps = digitSpan_fwd
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        Routine Presentation_Forward
      LoopTerminator digitLoop_fwd
      Routine Recall_Forward
      Routine Feedback_Forward
    LoopTerminator trials_fwd
  LoopTerminator blocks_fwd
  Routine End_Fwd
